//ImageTypes
(FixedInternalImagePixelType "float")
(FixedImageDimension 3)
(MovingInternalImagePixelType "float")
(MovingImageDimension 3)

//Components
(Registration "MultiResolutionRegistration")
(FixedImagePyramid "FixedSmoothingImagePyramid")
(MovingImagePyramid "MovingSmoothingImagePyramid")
(Interpolator "BSplineInterpolator")
(Metric "AdvancedMattesMutualInformation")
(Optimizer "AdaptiveStochasticGradientDescent")
(ResampleInterpolator "FinalBSplineInterpolator")
(Resampler "DefaultResampler")
(Transform "AffineTransform")

// ********** Pyramid

// Total number of resolutions
(NumberOfResolutions 4) 
(ImagePyramidSchedule 8 8 4 4 4 2 2 2 1 1 1 0.25)  

// ********** Transform

(FinalGridSpacingInPhysicalUnits 12.0 12.0 12.0)
(GridSpacingSchedule 8.0 4.0 2.0 1.0) 
(HowToCombineTransforms "Compose")
(AutomaticTransformInitialization "true")
(AutomaticScalesEstimation "true") 
(HowToCombineTransforms "Compose")
(RequiredRatioOfValidSamples 0.05
//(Scales 100000.0) 


// ********** Optimizer

// Maximum number of iterations in each resolution level:
(MaximumNumberOfIterations 1000) 


(AutomaticParameterEstimation "true")
(UseAdaptiveStepSizes "true")
(GradientEstimationMethod 3) 
(MaximumStepLength 1)
(NoiseCompensation "true")



// ********** Metric

//Number of grey level bins in each resolution level:
(NumberOfHistogramBins 32) 
(FixedLimitRangeRatio 0.0)
(MovingLimitRangeRatio 0.0)
(FixedKernelBSplineOrder 1)
(MovingKernelBSplineOrder 3)


// ********** Several

(WriteTransformParametersEachIteration "false")
(WriteTransformParametersEachResolution "false")
(WriteResultImage "false")
(ShowExactMetricValue "false")
(ErodeFixedMask "false")
(ErodeMovingMask "false")
(UseDifferentiableOverlap "false")


// ********** ImageSampler

//Number of spatial samples used to compute the mutual information in each resolution level:
(ImageSampler "RandomCoordinate")
(NumberOfSpatialSamples 2048)
(NewSamplesEveryIteration "true")


// ********** Interpolator and Resampler

//Order of B-Spline interpolation used in each resolution level:
(BSplineInterpolationOrder 1)

//Order of B-Spline interpolation used for applying the final deformation:
(FinalBSplineInterpolationOrder 3)

//Default pixel value for pixels that come from outside the picture:
(DefaultPixelValue 0)
